PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = eyetracker
  eyetracker = Pupil Labs
  keyboardBackend = ioHub
  plConfidenceThreshold = 0.6
  plPupilCaptureRecordingEnabled = True
  plPupilRemoteAddress = 127.0.0.1
  plPupilRemotePort = 50020
  plPupilRemoteTimeoutMs = 1000
  plPupillometryOnly = False
  plSurfaceName = dell
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Routines
  Routine highPrice
    ImageComponent stimulus
      anchor = top-center
      image = png/laptop.png
      pos = (0, 0.4)
      size = (0.25,0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      units = height
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    TextComponent text
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = 2259 zł
      wrapWidth = 50
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    TextboxComponent left_text
      alignment = top-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.02
      pos = (-.6, 0)
      size = (.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Posiada ekran o przekątnej 15.6" i wysokiej rozdzielczości. Matowa powłoka matrycy pozwala na korzystanie z komputera nawet przy dużym słońcu.

        Wyposażony w dwurdzeniowy procesor.

        Wbudowana pamięć RAM o pojemności 8 GB pozwala na uruchomienie kilku aplikacji jednocześnie oraz granie w wymagające sprzętowo gry komputerowe.

        Dysk SSD o pojemności 256 GB

        Ślad węglowy: 423 kg
    TextboxComponent right_text
      alignment = top-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.02
      pos = (.6, 0)
      size = (.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Bardzo dobre wykonanie, minimalistyczny wygląd, podoba mi się,  że nie ma zbędnych naklejek. Praca na nim przebiega płynnie, ekran rzeczywiście ładnie odwzorowuje kolory. Polecam!

        Ogólnie spoko, szybko przyzwyczaiłam się do klawiatury, wentylator chodzi na tyle cicho, że mi nie przeszkadza, bateria starcza na tyle, ile powinna. Bardzo fajny laptop.

        Urządzenie w całości z tworzywa, jednak dobrze spasowane i sprawia wrażenie solidnego. Matryca i działanie na zadowalającym  poziomie. Bateria daje radę kiedy np. jestem w podróży :).
    TextComponent left_title
      letterHeight = 0.03
      pos = (-.6, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = FAKTY:
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    TextComponent right_title
      letterHeight = 0.03
      pos = (.6, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = OPINIE:
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import remote_annotations as ra
        import time

        ip_address = '127.0.0.1'
        port = 50020
        # 1. Setup network connection
        ra.check_capture_exists(ip_address, port)
        pupil_remote, pub_socket = ra.setup_pupil_remote_connection(ip_address, port)

        # 2. Setup local clock function
        local_clock = time.perf_counter

        # 3. Measure clock offset accounting for network latency
        stable_offset_mean = ra.measure_clock_offset_stable(
                pupil_remote, clock_function=local_clock, n_samples=10
            )

        pupil_time_actual = ra.request_pupil_time(pupil_remote)
        local_time_actual = local_clock()
        pupil_time_calculated_locally = local_time_actual + stable_offset_mean

        ra.notify(pupil_remote,{"subject": "start_plugin", "name": "Annotation_Capture", "args": {}},)

        # start a recording (necessary for this example script)
        pupil_remote.send_string("R")
        pupil_remote.recv_string()
      Begin Routine:
        local_time = local_clock()
        label = "high price start"
        minimal_trigger = ra.new_trigger(label, local_time + stable_offset_mean)
        ra.send_trigger(pub_socket, minimal_trigger)
      End Experiment:
        # stop recording
        pupil_remote.send_string("r")
        pupil_remote.recv_string()
      End Routine:
        local_time = local_clock()
        label = "high price end"
        minimal_trigger = ra.new_trigger(label, local_time + stable_offset_mean)
        ra.send_trigger(pub_socket, minimal_trigger)
  Routine end
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Dziękujemy
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  Routine instruction
    TextComponent instrukcja
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0
      text = Naciśnij spację, żeby przejść dalej
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent textbox
      alignment = top-left
      anchor = top-left
      bold = False
      editable = False
      letterHeight = 0.04
      pos = (-.8, .4)
      size = (1.6, .5)
      startVal [time (s)] = 0.0
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      text:
        Cześć,

        dziękujemy, że zgodziłaś/eś się wziąć udział w badaniu. Jesteśmy zespołem naukowców i naukowczyń z Instytutu Studiów Społecznych im. prof. Roberta Zajonca na Uniwersytecie Warszawskim i prowadzimy badania nad decyzjami konsumenckimi.
        Przechodząc dalej wyrażasz zgodę na udział w badaniu. Będzie ono trwało około 10 minut i składało się z dwóch części. Podczas trwania całego badania będziemy monitorować ruchy Twoich gałek ocznych. Sposób zbierania tych danych nie tworzy zagrożenia dla Twojego wzroku, ani innych ryzyk zdrowotnych. Gdybyś jednak poczuł/a się źle, poinformuj o tym badacza lub badaczkę. Pamiętaj, że w każdej chwili masz prawo zrezygnować z udziału z badania bez podania przyczyny.
Flow
  Routine instruction
  Routine highPrice
  Routine end
